PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {'participant': '1', 'session': '001'}
  Full-screen window = True
  Monitor = Built_In_Display
  Screen = 1
  Units = height
  Use version = latest
  Window size (pixels) = [1440, 900]
  color = $[0,0,0]
  colorSpace = hsv
  expName = Dual Task
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Routines
  Routine instr
    TextComponent instructions_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_text
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent next_text
      letterHeight = 0.05
      pos = (0, -.4)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $cont_text
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  Routine block_2
    TextComponent B2_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 120.0
      text = Respond as quickly as possible.
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    SoundComponent sound_1
      saveStartStop = False
      sound = A
      startVal [time (s)] = 119
      stopVal [duration (s)] = 1.0
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  Routine thanks
    TextComponent thx_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Good work!

        You have completed this task.

        Press SPACE to exit.
    KeyboardComponent thx_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine sound_2
    SoundComponent sound_stim
      saveStartStop = False
      sound [set every repeat] = $SoundFile
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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    TextComponent stim_resp_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      text = Respond as quickly as possible.
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  Routine B1_trial
    TextComponent B1_prompt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Respond as quickly as possible.
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    CodeComponent B1_record
      Code Type = Py
      Begin Experiment:
        # The import and pyo_init should always come early on:
        import psychopy.voicekey as vk
        vk.pyo_init(rate=44100, buffersize=256)

        # What signaler class to use? Here just the demo signaler:
        from psychopy.voicekey.demo_vks import DemoVoiceKeySignal as Signaler

        # To use a LabJack as a signaling device:
        #from voicekey.signal.labjack_vks import LabJackU3VoiceKeySignal as Signaler
      Begin Routine:
        # Create a voice-key to be used:
        vpvk = vk.OnsetVoiceKey(
            sec=1.5,
            file_out='data/trial_'+Block+str(B1_trials.thisN).zfill(3)+'_'+Stim+'.wav')

        # Start it recording (and detecting):
          # non-blocking; don't block when using Builder
        vpvk.start()
      End Routine:
        # The recorded sound is saved upon .stop() by default. But
        # its a good idea to call .stop() explicitly, eg, if there's much slippage:

        vpvk.stop()

        # Add the detected time into the PsychoPy data file:
        thisExp.addData('vocal_RT', round(vpvk.event_onset, 3))
        thisExp.addData('bad_baseline', vpvk.bad_baseline)
        thisExp.addData('filename', vpvk.filename)
        thisExp.nextEntry()
  Routine B3_trial
    TextComponent B3_prompt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Respond as quickly as possible.
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    CodeComponent B3_record
      Code Type = Py
      Begin Routine:
        vpvk = vk.OnsetVoiceKey(
            sec=1.5,
            file_out='data/trial_'+Block+str(B3_trials.thisN).zfill(3)+'_'+Stim+'.wav')

        # Start it recording (and detecting):
          # non-blocking; don't block when using Builder
        vpvk.start()
      End Routine:
        vpvk.stop()

        # Add the detected time into the PsychoPy data file:
        thisExp.addData('vocal_RT', round(vpvk.event_onset, 3))
        thisExp.addData('bad_baseline', vpvk.bad_baseline)
        thisExp.addData('filename', vpvk.filename)
        thisExp.nextEntry()
Flow
  LoopInitiator B1 loopType="TrialHandler"
    conditionsFile = DPT_Blocks.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', '1_Practice'), ('instr_file', 'DPT_prac_instr'), ('trial_file', 'DPT_prac.xlsx')]),
      OrderedDict([('block', 1), ('instr_file', 'DPT_instr1'), ('trial_file', 'DPT_B1.xlsx')])]
    LoopInitiator instructions loopType="TrialHandler"
      conditionsFile = $instr_file
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine instr
    LoopTerminator instructions
    LoopInitiator B1_trials loopType="TrialHandler"
      conditionsFile = $trial_file
      loopType = random
      nReps = 1
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      Routine sound_2
      Routine B1_trial
    LoopTerminator B1_trials
  LoopTerminator B1
  LoopInitiator B2_instr loopType="TrialHandler"
    conditionsFile = DPT_instr2.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('index', 0), ('instr_text', 'Good work!\n\nFor this part you will need several sheets of boxes and a pencil. \n\nCollect these and adjust your space so that you can write.\n\n'), ('cont_text', 'Press SPACE for more instructions.')]),
      OrderedDict([('index', 1), ('instr_text', 'During this block you will mark the boxes on the page with an X.\n\nStart at the top left corner of the page and work across.\n\nDO NOT skip boxes.'), ('cont_text', 'Press SPACE for more instructions.')]),
      OrderedDict([('index', 2), ('instr_text', 'Work as quickly as you can.'), ('cont_text', 'Press SPACE for more instructions.')]),
      OrderedDict([('index', 3), ('instr_text', 'Mark the first two rows for practice.'), ('cont_text', 'Press SPACE for more instructions.')]),
      OrderedDict([('index', 4), ('instr_text', 'Good work.\n\nNow you will begin the full task.\n\nMark as many boxes as you can.\n\nIf you finish a page, continue onto the next.\n'), ('cont_text', 'Press SPACE to begin the second block.')])]
    Routine instr
  LoopTerminator B2_instr
  Routine block_2
  LoopInitiator B3_instr loopType="TrialHandler"
    conditionsFile = DPT_instr3.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('index', 0), ('instr_text', 'Good work!\n\nDuring this final part, you will complete both tasks at once.'), ('cont_text', 'Press SPACE for more instructions.')]),
      OrderedDict([('index', 1), ('instr_text', 'Respond as quickly and accurately as possible on both tasks.'), ('cont_text', 'Press SPACE to begin the final block.')])]
    Routine instr
  LoopTerminator B3_instr
  LoopInitiator B3_trials loopType="TrialHandler"
    conditionsFile = DPT_B3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('index', 0), ('Block', 'Block_3'), ('Stim', 'Saw'), ('SoundFile', 'C:\\Users\\Jordan\\Documents\\Experiment Building\\PsychoPy Audio Files\\Saw.wav'), ('Condition', 'Manmade'), ('Correct', 'Yes')]),
      OrderedDict([('index', 1), ('Block', 'Block_3'), ('Stim', 'Axe'), ('SoundFile', 'C:\\Users\\Jordan\\Documents\\Experiment Building\\PsychoPy Audio Files\\Axe.wav'), ('Condition', 'Manmade'), ('Correct', 'Yes')]),
      OrderedDict([('index', 2), ('Block', 'Block_3'), ('Stim', 'Hatchet'), ('SoundFile', 'C:\\Users\\Jordan\\Documents\\Experiment Building\\PsychoPy Audio Files\\Hatchet.wav'), ('Condition', 'Manmade'), ('Correct', 'Yes')]),
      OrderedDict([('index', 3), ('Block', 'Block_3'), ('Stim', 'Scissors'), ('SoundFile', 'C:\\Users\\Jordan\\Documents\\Experiment Building\\PsychoPy Audio Files\\Scissors.wav'), ('Condition', 'Manmade'), ('Correct', 'Yes')]),
      OrderedDict([('index', 4), ('Block', 'Block_3'), ('Stim', 'Pliers'), ('SoundFile', 'C:\\Users\\Jordan\\Documents\\Experiment Building\\PsychoPy Audio Files\\Pliers.wav'), ('Condition', 'Manmade'), ('Correct', 'Yes')]),
      OrderedDict([('index', 5), ('Block', 'Block_3'), ('Stim', 'Sandpaper'), ('SoundFile', 'C:\\Users\\Jordan\\Documents\\Experiment Building\\PsychoPy Audio Files\\Sandpaper.wav'), ('Condition', 'Manmade'), ('Correct', 'Yes')])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
    Routine sound_2
    Routine B3_trial
  LoopTerminator B3_trials
  Routine thanks
