PsychoPy2experiment version="3.1.5"
Settings
  Experiment info = {'participant': '1', 'session': '001'}
  Full-screen window = True
  Monitor = Built_In_Display
  Screen = 1
  Units = height
  Use version = latest
  Window size (pixels) = [1440, 900]
  expName = Dual Task VK no blocks
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Routines
  Routine instr
    TextComponent instructions_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_text
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent next_text
      letterHeight = 0.05
      pos = (0, -.4)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $cont_text
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  Routine block_2
    TextComponent B2_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 10.0
      text = Respond as quickly as possible.
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  Routine thanks
    TextComponent thx_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Good work!

        You have completed this task.

        Press SPACE to exit.
    KeyboardComponent thx_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine sound_3
    SoundComponent stim
      saveStartStop = False
      sound [set every repeat] = $SoundFile
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent sound_prompt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Respond as quickly as possible.
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  Routine record
    TextComponent prompt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Respond as quickly as possible.
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    CodeComponent voicekey
      Code Type = Py
      Begin Experiment:
        # The import and pyo_init should always come early on:
        import psychopy.voicekey as vk
        vk.pyo_init(rate=44100, buffersize=256)

        # What signaler class to use? Here just the demo signaler:
        from psychopy.voicekey.demo_vks import DemoVoiceKeySignal as Signaler

        # To use a LabJack as a signaling device:
        #from voicekey.signal.labjack_vks import LabJackU3VoiceKeySignal as Signaler
      Begin Routine:
        # Create a voice-key to be used:
        vpvk = vk.OnsetVoiceKey(
            sec=2,
            file_out='data/trial_'+str(B1_trials.thisN).zfill(3)+'_'+Stim+'.wav')

        # Start it recording (and detecting):
          # non-blocking; don't block when using Builder
        vpvk.start()
      End Routine:
        # The recorded sound is saved upon .stop() by default. But
        # its a good idea to call .stop() explicitly, eg, if there's much slippage:

        vpvk.stop()

        # Add the detected time into the PsychoPy data file:
        thisExp.addData('vocal_RT', round(vpvk.event_onset, 3))
        thisExp.addData('bad_baseline', vpvk.bad_baseline)
        thisExp.addData('filename', vpvk.filename)
        thisExp.nextEntry()
Flow
  LoopInitiator instructions loopType="TrialHandler"
    conditions = [OrderedDict([('index', 0), ('instr_text', 'Good work!\n\nNow you will complete a few more. \n\nRespond as quickly as possible.'), ('cont_text', 'Press SPACE to begin the first block.')])]
    conditionsFile = DPT_instr1.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine instr
  LoopTerminator instructions
  LoopInitiator B1_trials loopType="TrialHandler"
    conditionsFile = DPT_B1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('index', 0), ('Stim', 'Lamp'), ('SoundFile', 'C:\\Users\\Jordan\\Documents\\Experiment Building\\PsychoPy Audio Files\\Lamp.wav'), ('Condition', 'Manmade'), ('Correct', 'Yes')]),
      OrderedDict([('index', 1), ('Stim', 'Desk'), ('SoundFile', 'C:\\Users\\Jordan\\Documents\\Experiment Building\\PsychoPy Audio Files\\Desk.wav'), ('Condition', 'Manmade'), ('Correct', 'Yes')]),
      OrderedDict([('index', 2), ('Stim', 'Chair'), ('SoundFile', 'C:\\Users\\Jordan\\Documents\\Experiment Building\\PsychoPy Audio Files\\Chair.wav'), ('Condition', 'Manmade'), ('Correct', 'Yes')]),
      OrderedDict([('index', 3), ('Stim', 'Nightstand'), ('SoundFile', 'C:\\Users\\Jordan\\Documents\\Experiment Building\\PsychoPy Audio Files\\Nightstand.wav'), ('Condition', 'Manmade'), ('Correct', 'Yes')]),
      OrderedDict([('index', 4), ('Stim', 'Coffee Table'), ('SoundFile', 'C:\\Users\\Jordan\\Documents\\Experiment Building\\PsychoPy Audio Files\\Coffee Table.wav'), ('Condition', 'Manmade'), ('Correct', 'Yes')]),
      OrderedDict([('index', 5), ('Stim', 'Dresser'), ('SoundFile', 'C:\\Users\\Jordan\\Documents\\Experiment Building\\PsychoPy Audio Files\\Dresser.wav'), ('Condition', 'Manmade'), ('Correct', 'Yes')]),
      OrderedDict([('index', 6), ('Stim', 'Bookshelf'), ('SoundFile', 'C:\\Users\\Jordan\\Documents\\Experiment Building\\PsychoPy Audio Files\\Bookshelf.wav'), ('Condition', 'Manmade'), ('Correct', 'Yes')])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
    Routine sound_3
    Routine record
  LoopTerminator B1_trials
  LoopInitiator B2_instr loopType="TrialHandler"
    conditionsFile = DPT_instr2.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('index', 0), ('instr_text', 'Good work!\n\nFor this part you will need several sheets of boxes and a pencil. \n\nCollect these and adjust your space so that you can write.\n\n'), ('cont_text', 'Press SPACE for more instructions.')]),
      OrderedDict([('index', 1), ('instr_text', 'During this block you will mark the boxes on the page with an X.\n\nStart at the top left corner of the page and work across.\n\nDO NOT skip boxes.'), ('cont_text', 'Press SPACE for more instructions.')]),
      OrderedDict([('index', 2), ('instr_text', 'Work as quickly as you can.'), ('cont_text', 'Press SPACE for more instructions.')]),
      OrderedDict([('index', 3), ('instr_text', 'Mark the first two rows for practice.'), ('cont_text', 'Press SPACE for more instructions.')]),
      OrderedDict([('index', 4), ('instr_text', 'Good work.\n\nNow you will begin the full task.\n\nMark as many boxes as you can.\n\nIf you finish a page, continue onto the next.\n'), ('cont_text', 'Press SPACE to begin the second block.')])]
    Routine instr
  LoopTerminator B2_instr
  Routine block_2
  LoopInitiator B3_instr loopType="TrialHandler"
    conditionsFile = DPT_instr3.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('index', 0), ('instr_text', 'Good work!\n\nDuring this final part, you will complete both tasks at once.'), ('cont_text', 'Press SPACE for more instructions.')]),
      OrderedDict([('index', 1), ('instr_text', 'Respond as quickly and accurately as possible on both tasks.'), ('cont_text', 'Press SPACE to begin the final block.')])]
    Routine instr
  LoopTerminator B3_instr
  LoopInitiator B3_trials loopType="TrialHandler"
    conditionsFile = DPT_B3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('index', 0), ('Stim', 'Saw'), ('SoundFile', 'Saw.wav'), ('Condition', 'Manmade'), ('Correct', 'Yes')]),
      OrderedDict([('index', 1), ('Stim', 'Axe'), ('SoundFile', 'Axe.wav'), ('Condition', 'Manmade'), ('Correct', 'Yes')]),
      OrderedDict([('index', 2), ('Stim', 'Hatchet'), ('SoundFile', 'Hatchet.wav'), ('Condition', 'Manmade'), ('Correct', 'Yes')]),
      OrderedDict([('index', 3), ('Stim', 'Scissors'), ('SoundFile', 'Scissors.wav'), ('Condition', 'Manmade'), ('Correct', 'Yes')]),
      OrderedDict([('index', 4), ('Stim', 'Pliers'), ('SoundFile', 'Pliers.wav'), ('Condition', 'Manmade'), ('Correct', 'Yes')]),
      OrderedDict([('index', 5), ('Stim', 'Sandpaper'), ('SoundFile', 'Sandpaper.wav'), ('Condition', 'Manmade'), ('Correct', 'Yes')]),
      OrderedDict([('index', 6), ('Stim', 'Shears'), ('SoundFile', 'Shears.wav'), ('Condition', 'Manmade'), ('Correct', 'Yes')]),
      OrderedDict([('index', 7), ('Stim', 'Shirt'), ('SoundFile', 'Shirt.wav'), ('Condition', 'Manmade'), ('Correct', 'Yes')]),
      OrderedDict([('index', 8), ('Stim', 'Pants'), ('SoundFile', 'Pants.wav'), ('Condition', 'Manmade'), ('Correct', 'Yes')]),
      OrderedDict([('index', 9), ('Stim', 'Jeans'), ('SoundFile', 'Jeans.wav'), ('Condition', 'Manmade'), ('Correct', 'Yes')]),
      OrderedDict([('index', 10), ('Stim', 'Slacks'), ('SoundFile', 'Slacks.wav'), ('Condition', 'Manmade'), ('Correct', 'Yes')]),
      OrderedDict([('index', 11), ('Stim', 'Suit'), ('SoundFile', 'Suit.wav'), ('Condition', 'Manmade'), ('Correct', 'Yes')])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
    Routine record
  LoopTerminator B3_trials
  Routine thanks
